# Generated by Configurator on Wed Dec 18 13:35:14 CET 2019

# Reset
Property,Core,Initialize,0

# Devices
Device,COM4,SerialManager,COM4
Device,HamamatsuHam_DCAM,HamamatsuHam,HamamatsuHam_DCAM
Device,Scope,LeicaDMI,Scope
Device,IL-Turret,LeicaDMI,IL-Turret
Device,ObjectiveTurret,LeicaDMI,ObjectiveTurret
Device,TL-FieldDiaphragm,LeicaDMI,TL-FieldDiaphragm
Device,TL-ApertureDiaphragm,LeicaDMI,TL-ApertureDiaphragm
Device,IL-FieldDiaphragm,LeicaDMI,IL-FieldDiaphragm
Device,IL-ApertureDiaphragm,LeicaDMI,IL-ApertureDiaphragm
Device,FocusDrive,LeicaDMI,FocusDrive
Device,IL-Shutter,LeicaDMI,IL-Shutter
Device,TL-Shutter,LeicaDMI,TL-Shutter
Device,XYStage,LeicaDMI,XYStage
Device,Transmitted Light,LeicaDMI,Transmitted Light

# Pre-init settings for devices
Property,COM4,AnswerTimeout,500.0000
Property,COM4,BaudRate,19200
Property,COM4,DelayBetweenCharsMs,0.0000
Property,COM4,Handshaking,Off
Property,COM4,Parity,None
Property,COM4,StopBits,1
Property,COM4,Verbose,1
Property,Scope,AnswerTimeOut,250.0000
Property,Scope,Port,COM4

# Pre-init settings for COM ports

# Hub (parent) references
Parent,IL-Turret,Scope
Parent,ObjectiveTurret,Scope
Parent,TL-FieldDiaphragm,Scope
Parent,TL-ApertureDiaphragm,Scope
Parent,IL-FieldDiaphragm,Scope
Parent,IL-ApertureDiaphragm,Scope
Parent,FocusDrive,Scope
Parent,IL-Shutter,Scope
Parent,TL-Shutter,Scope
Parent,XYStage,Scope
Parent,Transmitted Light,Scope

# Initialize
Property,Core,Initialize,1

# Delays

# Focus directions

# Roles
Property,Core,Camera,HamamatsuHam_DCAM
Property,Core,Focus,FocusDrive
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels
# IL-Turret
Label,IL-Turret,4,5-TRI
Label,IL-Turret,3,4-EMP
Label,IL-Turret,2,3-Y3
Label,IL-Turret,1,2-GFP
Label,IL-Turret,0,1-A4
# ObjectiveTurret
Label,ObjectiveTurret,0,1-50x 0.9na

# Configuration presets
# Group: Channel
# Preset: A4
ConfigGroup,Channel,A4,Scope,Method,FLUO
ConfigGroup,Channel,A4,IL-Turret,Label,1-A4

# Preset: Y3
ConfigGroup,Channel,Y3,Scope,Method,FLUO
ConfigGroup,Channel,Y3,IL-Turret,Label,3-Y3

# Preset: GFP
ConfigGroup,Channel,GFP,Scope,Method,FLUO
ConfigGroup,Channel,GFP,IL-Turret,Label,2-GFP

# Preset: BF
ConfigGroup,Channel,BF,Scope,Method,TL BF
ConfigGroup,Channel,BF,IL-Turret,Label,4-EMP

# Preset: TRI
ConfigGroup,Channel,TRI,Scope,Method,FLUO
ConfigGroup,Channel,TRI,IL-Turret,Label,5-TRI



# PixelSize settings

